CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:404
GitHash:
ModuleCount:172
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^[a-z]+_sl(?P<slide>[0-9])_sec(?P<section>[0-9])_(?P<region>[a-z]+)_R(?P<round>[0-9]+)c(?P<channel>[0-9]+)_(?P<probe>[a-z,0-9]+)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:26
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "dapi")
    Name to assign these images:dapi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "1") (metadata does channel "2") (file doesnot contain "bgd")
    Name to assign these images:r1c2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "1") (metadata does channel "2") (file does contain "bgd")
    Name to assign these images:r1c2_bgd
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "1") (metadata does channel "3") (file doesnot contain "bgd")
    Name to assign these images:r1c3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "1") (metadata does channel "3") (file does contain "bgd")
    Name to assign these images:r1c3_bgd
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "1") (metadata does channel "4") (file doesnot contain "bgd")
    Name to assign these images:r1c4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "1") (metadata does channel "4") (file does contain "bgd")
    Name to assign these images:r1c4_bgd
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "1") (metadata does channel "5") (file doesnot contain "bgd")
    Name to assign these images:r1c5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "1") (metadata does channel "5") (file does contain "bgd")
    Name to assign these images:r1c5_bgd
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "2") (metadata does channel "2") (file doesnot contain "bgd")
    Name to assign these images:r2c2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "2") (metadata does channel "2") (file does contain "bgd")
    Name to assign these images:r2c2_bgd
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "2") (metadata does channel "3") (file doesnot contain "bgd")
    Name to assign these images:r2c3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "2") (metadata does channel "3") (file does contain "bgd")
    Name to assign these images:r2c3_bgd
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "2") (metadata does channel "4") (file doesnot contain "bgd")
    Name to assign these images:r2c4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "2") (metadata does channel "4") (file does contain "bgd")
    Name to assign these images:r2c4_bgd
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "2") (metadata does channel "5") (file doesnot contain "bgd")
    Name to assign these images:r2c5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "2") (metadata does channel "5") (file does contain "bgd")
    Name to assign these images:r2c5_bgd
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "3") (metadata does channel "2") (file doesnot contain "bgd")
    Name to assign these images:r3c2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "3") (metadata does channel "2") (file does contain "bgd")
    Name to assign these images:r3c2_bgd
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "3") (metadata does channel "3") (file doesnot contain "bgd")
    Name to assign these images:r3c3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "3") (metadata does channel "3") (file does contain "bgd")
    Name to assign these images:r3c3_bgd
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "3") (metadata does channel "4") (file doesnot contain "bgd")
    Name to assign these images:r3c4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "3") (metadata does channel "5") (file doesnot contain "bgd")
    Name to assign these images:r3c5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "3") (metadata does channel "4") (file does contain "bgd")
    Name to assign these images:r3c4_bgd
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does round "3") (metadata does channel "5") (file does contain "bgd")
    Name to assign these images:r3c5_bgd
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "region")
    Name to assign these images:region
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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
    Select the input image:dapi
    Name the output image:dapi_small
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

ClassifyPixels-Unet:[module_num:6|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
    Select the input image:dapi_small
    Name the output image:ClassifyPixelsUnet

ColorToGray:[module_num:7|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
    Select the input image:ClassifyPixelsUnet
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:OrigGreen
    Name the primary objects to be identified:Nuclei_small
    Typical diameter of objects, in pixel units (Min,Max):5,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.348
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
ResizeObjects:[module_num:9|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
    Select the input object:Nuclei_small
    Name the output object:Nuclei
    Method:Factor
    Factor:2
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
OverlayObjects:[module_num:10|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
    Input:dapi
    Name the output image:dapi_overlay
    Objects:Nuclei
    Opacity:0.3

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:dapi_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:dapi
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_objects
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertImageToObjects:[module_num:12|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
    Select the input image:region
    Name the output object:region_object
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:13|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
    Select the input image:r1c2_bgd
    Name the output object:r1c2_bgd_objects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:14|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
    Select the input image:r1c3_bgd
    Name the output object:r1c3_bgd_objects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:15|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
    Select the input image:r1c4_bgd
    Name the output object:r1c4_bgd_object
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:16|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
    Select the input image:r1c5_bgd
    Name the output object:r1c5_bgd_object
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:17|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
    Select the input image:r2c2_bgd
    Name the output object:r2c2_bgd_object
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:18|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
    Select the input image:r2c3_bgd
    Name the output object:r2c3_bgd_object
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:19|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
    Select the input image:r2c3_bgd
    Name the output object:r2c4_bgd_object
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:20|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
    Select the input image:r2c5_bgd
    Name the output object:r2c5_bgd_object
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:21|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
    Select the input image:r3c2_bgd
    Name the output object:r3c2_bgd_object
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:22|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
    Select the input image:r3c3_bgd
    Name the output object:r3c3_bgd_object
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:23|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
    Select the input image:r3c4_bgd
    Name the output object:r3c4_bgd_object
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:24|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
    Select the input image:r3c5_bgd
    Name the output object:r3c5_bgd_object
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureImageIntensity:[module_num:25|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
    Select images to measure:r1c2
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:r1c2_bgd_objects

MeasureImageIntensity:[module_num:26|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
    Select images to measure:r1c3
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:r1c3_bgd_objects

MeasureImageIntensity:[module_num:27|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
    Select images to measure:r1c4
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:r1c4_bgd_object

MeasureImageIntensity:[module_num:28|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
    Select images to measure:r1c5
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:r1c5_bgd_object

MeasureImageIntensity:[module_num:29|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
    Select images to measure:r2c2
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:r2c2_bgd_object

MeasureImageIntensity:[module_num:30|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
    Select images to measure:r2c3
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:r2c3_bgd_object

MeasureImageIntensity:[module_num:31|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
    Select images to measure:r2c4
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:r2c4_bgd_object

MeasureImageIntensity:[module_num:32|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
    Select images to measure:r2c5
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:r2c5_bgd_object

MeasureImageIntensity:[module_num:33|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
    Select images to measure:r3c2
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:r3c2_bgd_object

MeasureImageIntensity:[module_num:34|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
    Select images to measure:r3c3
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:r3c3_bgd_object

MeasureImageIntensity:[module_num:35|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
    Select images to measure:r3c4
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:r3c4_bgd_object

MeasureImageIntensity:[module_num:36|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
    Select images to measure:r3c5
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:r3c5_bgd_object

ImageMath:[module_num:37|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:r1c2_rescale
    Image or measurement?:Image
    Select the first image:r1c2
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1
    Measurement:Intensity_MeanIntensity_r1c2_r1c2_bgd_objects

ImageMath:[module_num:38|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:r1c3_rescale
    Image or measurement?:Image
    Select the first image:r1c3
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1
    Measurement:Intensity_MeanIntensity_r1c3_r1c3_bgd_objects

ImageMath:[module_num:39|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:r1c4_rescale
    Image or measurement?:Image
    Select the first image:r1c4
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:2
    Measurement:Intensity_MeanIntensity_r1c4_r1c4_bgd_object

ImageMath:[module_num:40|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:r1c5_rescale
    Image or measurement?:Image
    Select the first image:r1c5
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1
    Measurement:Intensity_MeanIntensity_r1c5_r1c5_bgd_object

ImageMath:[module_num:41|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:r2c2_rescale
    Image or measurement?:Image
    Select the first image:r2c2
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1
    Measurement:Intensity_MeanIntensity_r2c2_r2c2_bgd_object

ImageMath:[module_num:42|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:r2c3_rescale
    Image or measurement?:Image
    Select the first image:r2c3
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1
    Measurement:Intensity_MeanIntensity_r2c3_r2c3_bgd_object

ImageMath:[module_num:43|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:r2c4_rescale
    Image or measurement?:Image
    Select the first image:r2c4
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:0
    Measurement:Intensity_MeanIntensity_r2c4_r2c4_bgd_object

ImageMath:[module_num:44|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:r2c5_rescale
    Image or measurement?:Image
    Select the first image:r2c5
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1
    Measurement:Intensity_MeanIntensity_r2c5_r2c5_bgd_object

ImageMath:[module_num:45|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:r3c2_rescale
    Image or measurement?:Image
    Select the first image:r3c2
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1
    Measurement:Intensity_MeanIntensity_r2c5_r2c5_bgd_object

ImageMath:[module_num:46|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:r3c3_rescale
    Image or measurement?:Image
    Select the first image:r3c3
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1
    Measurement:Intensity_MeanIntensity_r3c3_r3c3_bgd_object

ImageMath:[module_num:47|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:r3c4_rescale
    Image or measurement?:Image
    Select the first image:r3c4
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:0
    Measurement:Intensity_MeanIntensity_r3c4_r3c4_bgd_object

ImageMath:[module_num:48|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:r3c5_rescale
    Image or measurement?:Image
    Select the first image:r3c5
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:0
    Measurement:Intensity_MeanIntensity_r3c5_r3c5_bgd_object

RescaleIntensity:[module_num:49|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
    Select the input image:r1c2_rescale
    Name the output image:r1c2_rescale2
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Custom
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    Upper intensity limit for the input image:.9
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
RescaleIntensity:[module_num:50|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
    Select the input image:r1c3_rescale
    Name the output image:r1c3_rescale2
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Custom
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    Upper intensity limit for the input image:.9
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
RescaleIntensity:[module_num:51|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
    Select the input image:r1c4_rescale
    Name the output image:r1c4_rescale2
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Custom
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    Upper intensity limit for the input image:.9
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
RescaleIntensity:[module_num:52|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
    Select the input image:r1c5_rescale
    Name the output image:r1c5_rescale2
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Custom
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    Upper intensity limit for the input image:.9
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
RescaleIntensity:[module_num:53|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
    Select the input image:r2c2_rescale
    Name the output image:r2c2_rescale2
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Custom
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    Upper intensity limit for the input image:.9
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
RescaleIntensity:[module_num:54|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
    Select the input image:r2c3_rescale
    Name the output image:r2c3_rescale2
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Custom
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    Upper intensity limit for the input image:.9
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
RescaleIntensity:[module_num:55|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
    Select the input image:r2c4_rescale
    Name the output image:r2c4_rescale2
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Custom
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    Upper intensity limit for the input image:.5
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
RescaleIntensity:[module_num:56|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
    Select the input image:r2c5_rescale
    Name the output image:r2c5_rescale2
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Custom
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    Upper intensity limit for the input image:.9
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
RescaleIntensity:[module_num:57|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
    Select the input image:r3c2_rescale
    Name the output image:r3c2_rescale2
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Custom
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    Upper intensity limit for the input image:.9
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
RescaleIntensity:[module_num:58|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
    Select the input image:r3c3_rescale
    Name the output image:r3c3_rescale2
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Custom
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    Upper intensity limit for the input image:.9
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
RescaleIntensity:[module_num:59|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
    Select the input image:r3c4_rescale
    Name the output image:r3c4_rescale2
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Custom
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    Upper intensity limit for the input image:.9
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
RescaleIntensity:[module_num:60|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
    Select the input image:r3c5_rescale
    Name the output image:r3c5_rescale2
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Custom
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    Upper intensity limit for the input image:.9
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
SaveImages:[module_num:61|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
    Select the type of image to save:Image
    Select the image to save:r1c2_rescale2
    Select method for constructing file names:From image filename
    Select image name for file prefix:r1c2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_rescale
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:62|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
    Select the type of image to save:Image
    Select the image to save:r1c4_rescale2
    Select method for constructing file names:From image filename
    Select image name for file prefix:r1c3
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_rescale
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:63|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
    Select the type of image to save:Image
    Select the image to save:r1c4_rescale2
    Select method for constructing file names:From image filename
    Select image name for file prefix:r1c4
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_rescale
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:64|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
    Select the type of image to save:Image
    Select the image to save:r1c5_rescale2
    Select method for constructing file names:From image filename
    Select image name for file prefix:r1c5
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_rescale
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:65|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
    Select the type of image to save:Image
    Select the image to save:r2c2_rescale2
    Select method for constructing file names:From image filename
    Select image name for file prefix:r2c2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_rescale
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:66|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
    Select the type of image to save:Image
    Select the image to save:r2c3_rescale2
    Select method for constructing file names:From image filename
    Select image name for file prefix:r2c3
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_rescale
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:67|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
    Select the type of image to save:Image
    Select the image to save:r2c4_rescale2
    Select method for constructing file names:From image filename
    Select image name for file prefix:r2c4
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_rescale
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:68|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
    Select the type of image to save:Image
    Select the image to save:r2c5_rescale2
    Select method for constructing file names:From image filename
    Select image name for file prefix:r2c5
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_rescale
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:69|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
    Select the type of image to save:Image
    Select the image to save:r3c2_rescale2
    Select method for constructing file names:From image filename
    Select image name for file prefix:r3c2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_rescale
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:70|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
    Select the type of image to save:Image
    Select the image to save:r3c3_rescale2
    Select method for constructing file names:From image filename
    Select image name for file prefix:r3c3
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_rescale
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:71|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
    Select the type of image to save:Image
    Select the image to save:r3c4_rescale2
    Select method for constructing file names:From image filename
    Select image name for file prefix:r3c4
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_rescale
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:72|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
    Select the type of image to save:Image
    Select the image to save:r3c5_rescale2
    Select method for constructing file names:From image filename
    Select image name for file prefix:r3c5
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_rescale
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MaskImage:[module_num:73|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notes:['Mask the foci image using the nuclei objects.']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
    Select the input image:r1c2_rescale
    Name the output image:r1c2_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MaskImage:[module_num:74|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
    Select the input image:r1c3_rescale
    Name the output image:r1c3_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MaskImage:[module_num:75|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
    Select the input image:r1c4_rescale
    Name the output image:r1c4_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MaskImage:[module_num:76|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
    Select the input image:r1c5_rescale
    Name the output image:r1c5_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MaskImage:[module_num:77|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
    Select the input image:r2c2_rescale
    Name the output image:r2c2_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MaskImage:[module_num:78|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
    Select the input image:r2c3_rescale
    Name the output image:r2c3_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MaskImage:[module_num:79|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
    Select the input image:r2c4_rescale
    Name the output image:r2c4_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MaskImage:[module_num:80|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
    Select the input image:r2c5_rescale
    Name the output image:r2c5_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MaskImage:[module_num:81|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
    Select the input image:r3c2_rescale
    Name the output image:r3c2_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MaskImage:[module_num:82|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
    Select the input image:r3c3_rescale
    Name the output image:r3c3_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MaskImage:[module_num:83|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
    Select the input image:r3c4_rescale
    Name the output image:r3c4_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MaskImage:[module_num:84|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
    Select the input image:r3c5_rescale
    Name the output image:r3c5_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:85|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
    Select the input image:r1c2_masked
    Name the output image:r1c2_en
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:86|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
    Select the input image:r1c3_masked
    Name the output image:r1c3_en
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:87|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
    Select the input image:r1c4_masked
    Name the output image:r1c4_en
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:88|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
    Select the input image:r1c5_masked
    Name the output image:r1c5_en
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:89|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
    Select the input image:r2c2_masked
    Name the output image:r2c2_en
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:90|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
    Select the input image:r2c3_masked
    Name the output image:r2c3_en
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:91|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
    Select the input image:r2c4_masked
    Name the output image:r2c4_en
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:92|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
    Select the input image:r2c5_masked
    Name the output image:r2c5_en
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:93|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
    Select the input image:r3c2_masked
    Name the output image:r3c2_en
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:94|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
    Select the input image:r3c3_masked
    Name the output image:r3c3_en
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:95|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
    Select the input image:r3c4_masked
    Name the output image:r3c4_en
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:96|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
    Select the input image:r3c5_masked
    Name the output image:r3c5_en
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:97|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notes:['Identify the foci using per-object thresholding to compute a threshold for each individual nuclei object. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:r1c2_en
    Name the primary objects to be identified:r1c2_puncta
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:98|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
    Select the input image:r1c3_en
    Name the primary objects to be identified:r1c3_puncta
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:99|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
    Select the input image:r1c4_en
    Name the primary objects to be identified:r1c4_puncta
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:100|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
    Select the input image:r1c5_en
    Name the primary objects to be identified:r1c5_puncta
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:.5
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:101|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
    Select the input image:r2c2_en
    Name the primary objects to be identified:r2c2_puncta
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:102|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
    Select the input image:r2c3_en
    Name the primary objects to be identified:r2c3_puncta
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:103|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
    Select the input image:r2c4_en
    Name the primary objects to be identified:r2c4_puncta
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:104|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
    Select the input image:r2c5_en
    Name the primary objects to be identified:r2c5_puncta
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:105|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
    Select the input image:r3c2_en
    Name the primary objects to be identified:r3c2_puncta
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyPrimaryObjects:[module_num:106|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
    Select the input image:r3c3_en
    Name the primary objects to be identified:r3c3_puncta
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:107|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
    Select the input image:r3c4_en
    Name the primary objects to be identified:r3c4_puncta
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:108|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
    Select the input image:r3c5_en
    Name the primary objects to be identified:r3c5_puncta
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

OverlayOutlines:[module_num:109|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:r1c2_en
    Name the output image:r1c2_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:r1c2_puncta

OverlayOutlines:[module_num:110|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:r1c3_en
    Name the output image:r1c3_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:r1c3_puncta

OverlayOutlines:[module_num:111|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:r1c4_en
    Name the output image:r1c4_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:r1c4_puncta

OverlayOutlines:[module_num:112|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:r1c5_en
    Name the output image:r1c5_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:r1c5_puncta

OverlayOutlines:[module_num:113|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:r2c2_en
    Name the output image:r2c2_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:r2c2_puncta

OverlayOutlines:[module_num:114|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:r2c3_en
    Name the output image:r2c3_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:r2c3_puncta

OverlayOutlines:[module_num:115|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:r2c4_en
    Name the output image:r2c4_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:r2c4_puncta

OverlayOutlines:[module_num:116|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:r2c5_en
    Name the output image:r2c5_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:r2c5_puncta

OverlayOutlines:[module_num:117|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:r3c2_en
    Name the output image:r3c2_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:r3c2_puncta

OverlayOutlines:[module_num:118|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:r3c3_en
    Name the output image:r3c3_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:r3c3_puncta

OverlayOutlines:[module_num:119|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:r3c4_en
    Name the output image:r3c4_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:r3c4_puncta

OverlayOutlines:[module_num:120|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:r3c5_en
    Name the output image:r3c5_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:r3c5_puncta

SaveImages:[module_num:121|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
    Select the type of image to save:Image
    Select the image to save:r1c2_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:r1c2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_puncta
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:122|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
    Select the type of image to save:Image
    Select the image to save:r1c3_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:r1c3
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_puncta
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:123|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
    Select the type of image to save:Image
    Select the image to save:r1c4_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:r1c4
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_puncta
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:124|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
    Select the type of image to save:Image
    Select the image to save:r1c5_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:r1c5
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_puncta
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:125|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
    Select the type of image to save:Image
    Select the image to save:r2c2_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:r2c2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_puncta
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:126|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
    Select the type of image to save:Image
    Select the image to save:r2c3_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:r2c3
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_puncta
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:127|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
    Select the type of image to save:Image
    Select the image to save:r2c4_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:r2c4
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_puncta
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:128|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
    Select the type of image to save:Image
    Select the image to save:r2c5_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:r2c5
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_puncta
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:129|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
    Select the type of image to save:Image
    Select the image to save:r3c2_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:r3c2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_puncta
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:130|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
    Select the type of image to save:Image
    Select the image to save:r3c3_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:r3c3
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_puncta
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:131|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
    Select the type of image to save:Image
    Select the image to save:r3c4_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:r3c4
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_puncta
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:132|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
    Select the type of image to save:Image
    Select the image to save:r3c5_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:r3c5
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_puncta
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:133|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notes:['Measure the intensity of the nuclei against the nuclei image.']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
    Select images to measure:dapi, r1c2_rescale, r1c3_rescale, r1c4_rescale, r1c5_rescale, r2c2_rescale, r2c3_rescale, r2c4_rescale, r2c5_rescale, r3c2_rescale, r3c3_rescale, r3c4_rescale
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:134|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notes:['Measure the intensity of the foci against the h2ax image.']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
    Select images to measure:r1c2_rescale
    Select objects to measure:r1c2_puncta

MeasureObjectIntensity:[module_num:135|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
    Select images to measure:r1c3_rescale
    Select objects to measure:r1c3_puncta

MeasureObjectIntensity:[module_num:136|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
    Select images to measure:r1c4_rescale
    Select objects to measure:r1c4_puncta

MeasureObjectIntensity:[module_num:137|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
    Select images to measure:r1c5_rescale
    Select objects to measure:r1c5_puncta

MeasureObjectIntensity:[module_num:138|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
    Select images to measure:r2c2_rescale
    Select objects to measure:r2c2_puncta

MeasureObjectIntensity:[module_num:139|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
    Select images to measure:r2c3_rescale
    Select objects to measure:r2c3_puncta

MeasureObjectIntensity:[module_num:140|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
    Select images to measure:r2c4_rescale
    Select objects to measure:r2c4_puncta

MeasureObjectIntensity:[module_num:141|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
    Select images to measure:r2c5_rescale
    Select objects to measure:r2c5_puncta

MeasureObjectIntensity:[module_num:142|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
    Select images to measure:r3c2_rescale
    Select objects to measure:r3c2_puncta

MeasureObjectIntensity:[module_num:143|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
    Select images to measure:dapi, r3c3_rescale
    Select objects to measure:r3c3_puncta

MeasureObjectIntensity:[module_num:144|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
    Select images to measure:r3c4_rescale
    Select objects to measure:r3c4_puncta

MeasureObjectIntensity:[module_num:145|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
    Select images to measure:r3c5_rescale
    Select objects to measure:r3c5_puncta

MeasureObjectSizeShape:[module_num:146|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
    Select object sets to measure:Nuclei, r1c2_puncta, r1c3_puncta, r1c4_puncta, r1c5_puncta, r2c2_puncta, r2c3_puncta, r2c4_puncta, r2c5_puncta, r3c2_puncta, r3c3_puncta, r3c4_puncta, r3c5_puncta
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:147|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notes:['Establish a parent-child between the foci (âx80x9cchildrenâx80x9d) and the nuclei (âx80x9cparentsâx80x9d) in order to determine which foci belong to which nuclei. Then, calculate mean foci measurements for each nucleus.']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
    Parent objects:Nuclei
    Child objects:r1c2_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:148|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
    Parent objects:Nuclei
    Child objects:r1c3_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:149|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
    Parent objects:Nuclei
    Child objects:r1c4_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:150|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
    Parent objects:Nuclei
    Child objects:r1c5_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:151|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
    Parent objects:Nuclei
    Child objects:r2c2_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:152|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
    Parent objects:Nuclei
    Child objects:r2c3_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:153|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
    Parent objects:Nuclei
    Child objects:r2c4_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:154|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
    Parent objects:Nuclei
    Child objects:r2c5_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:155|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
    Parent objects:Nuclei
    Child objects:r3c2_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:156|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
    Parent objects:Nuclei
    Child objects:r3c3_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:157|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
    Parent objects:Nuclei
    Child objects:r3c4_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:158|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
    Parent objects:Nuclei
    Child objects:r3c5_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:159|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
    Parent objects:region_object
    Child objects:r1c2_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:160|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
    Parent objects:region_object
    Child objects:r1c3_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:161|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
    Parent objects:region_object
    Child objects:r1c4_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:162|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
    Parent objects:region_object
    Child objects:r1c5_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:163|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
    Parent objects:region_object
    Child objects:r2c2_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:164|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
    Parent objects:region_object
    Child objects:r2c3_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:165|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
    Parent objects:region_object
    Child objects:r2c4_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:166|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
    Parent objects:region_object
    Child objects:r2c5_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:167|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
    Parent objects:region_object
    Child objects:r3c2_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:168|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
    Parent objects:region_object
    Child objects:r3c3_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:169|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
    Parent objects:region_object
    Child objects:r3c4_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:170|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
    Parent objects:region_object
    Child objects:r3c5_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:171|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
    Parent objects:region_object
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:172|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|glutamatergic_hiplex_puncta
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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